#########################################################
# 
# PulseTests
#  
# Tests the table modes for the pulse commands
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(PulseTests, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"PulseTests")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("PulseTests")
   else
      gExpt->addExperiment(parentPath,"PulseTests",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds [""] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["nDataPnts     = nrPnts",
          "dPulse        = pulseLengthCh1",
          "aRF           = 0",
          "aRF2          = -6",
          "dDelay        = pulseDelay",
          "tAmp          = linspace(2000,16000,4)",
          "tFreq         = gFX3->convertFrequency(linspace(1,4,4))",
          "tFreq2        = gFX3->convertFrequency(matrix(4)+1)",
          "tPhase        = linspace(1,4,4)*2^14",
          "tAmpPhase     = gFX3->interleaveTables(tAmp,tPhase)",
          "tAmpFreq      = gFX3->interleaveTables(tAmp,tFreq)",
          "tPhaseFreq    = gFX3->interleaveTables(tPhase,tFreq)",
          "nPhaseSteps   = 4",
          "nFreqSteps    = 4",
          "nAmpSteps     = 4",
          "nAmpFreqSteps = 4",
          "nPhaseFreqSteps = 4",
          "nAmpPhaseSteps = 4",
          "nDurSteps     = 10",
          "tDur1         = gFX3->convertDelays(linspace(1,10,nDurSteps))",
          "tDur2         = gFX3->convertDelays(linspace(2,30,nDurSteps))",
          "freq          = b1FreqCh1",
          "dAcqDelay     = 20",
          "totPnts       = nrPnts",
          "totTime       = acqTime",
          "freqCh2       = 2",
          "freqCh1       = b1FreqCh1",
          "freqRx        = b1FreqCh1"]
   var = [""]
   pp_list = ["aRF","p1","dPulse","tAmp","nAmpSteps","l1","tDur1","nDurSteps","l2","tDur2","l3","aRF2","tFreq","nFreqSteps","l4","dAcqDelay","tPhase","nPhaseSteps","l5","tAmpPhase","nAmpPhaseSteps","l6","tAmpFreq","nAmpFreqSteps","l7","tPhaseFreq","nPhaseFreqSteps","l8","nDataPnts"]
   pp_name = "PulseTests.p"
   phase_list = [0,0,0,0;0,1,2,3]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#########################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
# March 2021 CDE
#########################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

# Allocate space for output data
   sumData = cmatrix(totPnts)

# Calculate suitable time and frequency axes
   tAxis = ([0:1:totPnts-1]/totPnts)*totTime*1000 # us
   fAxis = [-totPnts*zf/2:totPnts*zf/2-1]/(totTime*zf)*1000 # Hz

# Time domain filter
   if(filter == "yes")
      flt = filters:get_filter(filterType,"FTFid",tAxis/1e6)
   else
      flt = matrix(totPnts)+1
   endif

# Get plot regions
   (prt,prf) = ucsPlot:getPlotReferences()
   prt->showimag("true")
   prf->showimag("false")

# Accumulate scans
   for(scan = 0 to nrScans-1)

    # Set phases for this scan
      (ppList,pAcq) = ucsRun:setPPPhase(ppList,scan,pcList,pcIndex)

    # Send all parameter values to DSP/FX3
       ucsRun:updatePPParameters(ppList,guipar)

    # Wait for repetition time and check for abort
      check = ucsRun:checkTiming(guipar,scan,pcList)
      if(check == "abort")
         return(check)
      endif

    # Run the pulse program and collect the data
      (status,data) = ucsRun:getData(totPnts,guipar)

    # See if the abort button has been pressed
      if(status == "abort")
         return(0)
      endif

    # Accumlate the data
      sumData = ucsRun:accumulate(accumulate,pAcq,sumData,data)

    # Plot the data 
      ucsPlot:graphTime(prt,tAxis,sumData,scan,guipar,"Time data (scan : $scan+1$)","Spectral data")

    # Check if complete button pressed
      if(check == "finish")
         scan = scan+1
         exitfor()
      endif

   next(scan)

# Save the data
   ucsFiles:savePlot(prt,:getPlotInfo("pt1"),guipar,"noReport")
   ucsFiles:savePlot(prf,:getPlotInfo("pt2"),guipar,"simpleReport")

# Pack the data into a structure
   result = struct()
   result->tAxis = tAxis
   result->tData = sumData/scan
   result->par = struct(guipar)

# Return result
   return(result)

endproc("execpp") # Don't remove argument


########################################################
# Get the name of a plot file given the region name
# or return the whole list
########################################################

procedure(getPlotInfo,plotRegion)

   info = ["pt1","fid.pt1","pt2","spectrum.pt1"]

   if(plotRegion == "all")
      return(info)
   endif

   idx = getlistindex(info,plotRegion)
   if(idx != -1)
      return(info[idx+1])
   endif

endproc(null)

########################################################
# Return expected experiment duration in seconds
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)
   totScans = nrScans + useStartDelay
   duration = (totScans*repTime)/1000

endproc(duration)


