############################################################
#  
# Generates a dual channel pulse with a ramped shaped 
# amplitude. Uses an interleaved table and shapedrf.
#
# pulse - delay - shapedrf - delay - acq
#
############################################################

procedure(pulse_program,dir,mode,pars)

# Expose parameters for FX3 implementation
   if(nrArgs == 3)
      assignlist(pars)
   endif

# Interface description (name, label, ctrl, vartype)
  interface = ["b1FreqCh1",       "Ch1 frequency",                 "tb",  "freq";
               "b1FreqCh2",       "Ch2 frequency",                "tb",  "freq";
               "txMaxdB",         "Pulse max amplitude (dB)",     "tb",  "float";
               "nAmpSteps",       "Amplitude steps",              "tb",  "integer";
               "stepDur",         "Table step length (us)",       "tb",  "pulselength";
               "repTime",         "Repetition time (ms)",         "tb",  "reptime"]

# Define the tab groups and their order
   groups = ["Pulse_sequence","Acquisition",
             "Processing_Std","Display_Std","File_Settings"]

# Relationships to determine remaining variable values
   relationships = ["nDataPnts     = nrPnts",
                    "a1            = 0",
                    "a2            = 0",
                    "aMax          = gFX3->convertAmplitude(txMaxdB)",
                    "ampSweep1     = linspace(aMax/nAmpSteps,aMax,nAmpSteps)",
                    "ampSweep2     = linspace(aMax,aMax/nAmpSteps,nAmpSteps)",
                    "tAmp          = gFX3->interleaveTables(ampSweep1,ampSweep2)",
                    "nTabSz2       = size(tAmp)/2",
                    "dTabStep      = stepDur",
                    "f1            = b1FreqCh1",
                    "f2            = b1FreqCh2",
                    "totPnts       = nrPnts",
                    "totTime       = acqTime"]

# These parameters will be changed between experiments
   variables = [""]

# Pulse sequence
   initpp(dir)     
   pulse("1nb",a1,p1,f1,"2nb",a2,p1,f2,10)    # Dual channel pulse for scope triggering 
   delay(10) 
   dualshapedrf1(tAmp,p2,p2,nTabSz2,dTabStep,"no") # Dual channel shaped pulse
   delay(10)                          
   acquire("overwrite",nDataPnts)  

   parList = endpp(0) # Combine commands and return parameter list

# Phase cycle list
   phaseList  = [0,0,0,0;   # p1 : Trigger phase
                 0,1,2,3;   # p2 : Shaped phase
                 0,1,2,3]   # pA : Acquire phase

endproc(parList,groups,interface,relationships,variables,null,phaseList)

#####################################################
# Assign those parameters which should take their 
# values from the factory defaults when making a 
# new experiment
#####################################################

procedure(getFactoryBasedParameters, par)

   specPar = gData->specParameters
   if(specPar == null)
      return(null)
   endif
   assignlist(specPar)

   par = ["rxGain        = $rxOptGaindB$",
          "b1FreqCh1     = $frequencyCh1$",
          "b1FreqCh2     = $frequencyCh2$"]

endproc(par)

