#########################################################
# 
# oneTTLPulse
#
# Pulse program to generate ttl pulse
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(oneTTLPulse, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"oneTTLPulse")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("oneTTLPulse")
   else
      gExpt->addExperiment(parentPath,"oneTTLPulse",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds [""] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["freqCh1   = 2",
          "d1 = d1"]
   var = [""]
   pp_list = ["d1"]
   pp_name = "oneTTLPulse.p"
   phase_list = [0]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)



  (ppList,pAcq) = ucsRun:setPPPhase(ppList,0,pcList,pcIndex)

   ucsRun:updatePPParameters(ppList,guipar)


    # Wait for the repetition time to complete
      check = ucsRun:checkTiming(guipar,0,pcList)
      if(check == "abort")
         return(0)
      endif

    # Run the pulse program
      status = ucsRun:runExperiment(guipar)

    # See if stop button/escape key pressed
      if(status != "ok")
         return(0)
      endif
      

endproc("execpp") # Don't remove argument


########################################################
# Return expected experiment duration in seconds
########################################################

procedure(expectedDuration, guipar)

endproc(-1)
